import ij.*;
import ij.process.*; 
import ij.measure.*;
import ij.gui.Overlay;

mm.scripter().clearMessageWindow();
print("Live processing");
mmc.setXYPosition(0,0);
mm.live().setLiveMode(true);
//mmc.snapImage();

int x = mmc.getImageWidth();
int y = mmc.getImageHeight();

// create stand-alone image processor
// ----------------------------------
//ip = new ByteProcessor(x, y,(byte[])mmc.getImage());

// display processed image
// -----------------------
ImagePlus ipp = new ImagePlus("test",ip);
ipp.show();
//mm.displays().show(img);

while(true){
	//mmc.snapImage();
	
	byte[] imgBytes = (byte[])mmc.getImage();
   ByteProcessor bp = new ByteProcessor(x,y,imgBytes);
	ipp.setProcessor(bp);
	ImageStatistics bs = ipp.getAllStatistics();
	bs.getStatistics(ipp.getProcessor());
	double dx = bs.xCenterOfMass-x/2;
	double dy = bs.yCenterOfMass-y/2;
	//print(dx+","+dy);
	mmc.sleep(50);
mmc.setXYPosition(mmc.getXPosition()-dx,mmc.getYPosition()-dy);
mmc.waitForDevice("DXYStage");
mmc.sleep(50);

	ipp.show();

	}